CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,300
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:7|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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