CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,200
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Nuclei|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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