CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:Channel1
    Channel number:Green: 2
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    Image name:Channel2
    Channel number:Blue: 3
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    Image name:Channel3

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Channel2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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