CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:Red: 1
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    Image name:Channel1
    Channel number:Green: 2
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    Image name:Channel2
    Channel number:Blue: 3
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    Image name:Channel3
    Channel number:Alpha: 4
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    Image name:Channel4

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Channel2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Channel1
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Channel3
    Name the primary objects to be identified:Vesicles
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
RelateObjects:[module_num:10|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
    Select the input child objects:Vesicles
    Select the input parent objects:Cytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
FilterObjects:[module_num:11|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
    Name the output objects:FilteredCytoplasm
    Select the object to filter:Cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_Vesicles_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel3
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:5
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cytoplasm
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredCytoplasm
