CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:Red: 1
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    Image name:Channel1
    Channel number:Green: 2
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    Image name:Channel2
    Channel number:Blue: 3
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    Image name:Channel3
    Channel number:Alpha: 4
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    Image name:Channel4

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Channel1
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:2
    Select an image to measure:Channel3
    Select an image to measure:Channel4
    Select objects to measure:Cells

ClassifyObjects:[module_num:8|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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:Cells
    Select the measurement to classify by:Location_Center_X
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:Cells
    Select the first measurement:Intensity_MeanIntensity_Channel3
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Select the second measurement:Intensity_MeanIntensity_Channel4
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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