CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:original
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Colonies02
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Colonies02

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Colonies02
    Calculate the Zernike features?:No

DisplayHistogram:[module_num:11|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
    Select the object whose measurements will be displayed:Colonies02
    Select the object measurement to plot:AreaShape_Area
    Number of bins:20
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0
