CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "cDAPI")
    Name to assign these images:ch1_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cRFP")
    Name to assign these images:ch2_RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ch1_DAPI
    Name the primary objects to be identified:NUCLEI
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:2.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:6|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notes:['']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
    Select objects to measure:NUCLEI
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Name the output objects:NUCLEI_FILTERED
    Select the object to filter:NUCLEI
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:NUCLEI_FILTERED
    Name the objects to be identified:CELLS
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ch2_RFP
    Number of pixels by which to expand the primary objects:30
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    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:NUCLEI_FILTERED_FURTHER
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['']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
    Select the input image:ch2_RFP
    Name the output image:enhancedFOCI
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:10|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notes:['']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
    Select the input image:enhancedFOCI
    Name the primary objects to be identified:FOCI
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:fociOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Masking objects:CELLS
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    Use default parameters?:Default
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
RelateObjects:[module_num:11|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notes:['']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
    Select the input child objects:FOCI
    Select the input parent objects:CELLS
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:Yes
    Parent name:NUCLEI_FILTERED_FURTHER

MeasureObjectSizeShape:[module_num:12|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notes:['']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
    Select objects to measure:NUCLEI_FILTERED_FURTHER
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:13|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notes:['']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
    Hidden:1
    Select an image to measure:ch2_RFP
    Select objects to measure:FOCI
    Select objects to measure:CELLS

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SecondaryOutlines
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:FOCI

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:CELLS
    Measurement to display:Children_FOCI_Count
    Select the image on which to display the measurements:OrigOverlay
    Text color:green
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch2_RFP
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|./csv_files/\\\\g<Plate>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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