CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "cDAPI")
    Name to assign these images:ch1_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cRFP")
    Name to assign these images:ch2_RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Ch_1
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:30
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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    Select the images to measure:ch2_RFP
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ch1_DAPI
    Name the primary objects to be identified:NUCLEI
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:2.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:7|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notes:['Measure NUCLEI to allow for filtering based on shape', '2014-12-17, sfn']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
    Select objects to measure:NUCLEI
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Name the output objects:NUCLEI_FILTERED
    Select the object to filter:NUCLEI
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:NUCLEI_FILTERED
    Name the objects to be identified:CELLS
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ch2_RFP
    Number of pixels by which to expand the primary objects:30
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    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:NUCLEI_FILTERED_FURTHER
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:CELLS
    Select the smaller identified objects:NUCLEI_FILTERED_FURTHER
    Name the tertiary objects to be identified:CYTOPLASM
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:11|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notes:['First step in counting spots - enhance them', '2014-12-05 sfn']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
    Select the input image:ch2_RFP
    Name the output image:enhancedFOCI
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Third step in counting spots - count the spots inside the entire cell.', '2014-12-05 sfn']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
    Select the input image:enhancedFOCI
    Name the primary objects to be identified:FOCI
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:fociOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Masking objects:CELLS
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    Use default parameters?:Default
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
RelateObjects:[module_num:13|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notes:['Can I select nuclei as parents, although some foci are found outside, in the cytoplasm?', 'Yes/No: First reate to cells (foci are inside) then to nuclei (the parent of the cell)', '2014-12-05, sfn']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
    Select the input child objects:FOCI
    Select the input parent objects:CELLS
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:Yes
    Parent name:NUCLEI_FILTERED_FURTHER

SaveImages:[module_num:14|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notes:['Save the FOCI masks for openBIS', '2014-12-05, sfn', '2014-12-19, sfn: Modified to save to openBIS-import friendly path', '']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
    Select the type of image to save:Image
    Select the image to save:fociOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch2_RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Foci
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|./for_openBIS/SRIVIDYA_VELAGAPUDI/DRUG_SCREEN/VELAGAPUDI-HDLLDL-CB-K-1/\\\\g<Plate>/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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notes:['Save the NUCLEI_FILTERED_FURTHER masks for later import to openBIS', '2014-12-17, sfn ', '2014-12-19, sfn: Modified to save to openBIS-import friendly path', '']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
    Select the type of image to save:Objects
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    Select the objects to save:NUCLEI_FILTERED_FURTHER
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch1_DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|./for_openBIS/SRIVIDYA_VELAGAPUDI/DRUG_SCREEN/VELAGAPUDI-HDLLDL-CB-K-1/\\\\g<Plate>/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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notes:['Save the CYTOPLASM masks for later import to openBIS', '2014-12-17, sfn', '2014-12-19, sfn: Modified to save to openBIS-import friendly path', '']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
    Select the type of image to save:Objects
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    Select the objects to save:CYTOPLASM
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch2_RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytoplasm
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|./for_openBIS/SRIVIDYA_VELAGAPUDI/DRUG_SCREEN/VELAGAPUDI-HDLLDL-CB-K-1/\\\\g<Plate>/outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:17|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notes:['Display various measurements on images to figure out which should be used for filtering out objects', '2014-12-17, sfn']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:NUCLEI_FILTERED
    Measurement to display:Children_[None]
    Select the image on which to display the measurements:DAPI_overlaid
    Text color:yellow
    Name the output image that has the measurements displayed:displayDataImage1
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:18|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notes:['Display various measurements on images to figure out which should be used for filtering out objects', '2014-12-17, sfn']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:NUCLEI_FILTERED
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:displayDataImage1
    Text color:red
    Name the output image that has the measurements displayed:displayDataImage2
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):20
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:19|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notes:['Display various measurements on images to figure out which should be used for filtering out objects', '2014-12-17, sfn']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:NUCLEI_FILTERED
    Measurement to display:AreaShape_Solidity
    Select the image on which to display the measurements:displayDataImage2
    Text color:cyan
    Name the output image that has the measurements displayed:displayDataImage3
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):-20
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:20|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notes:['Display various measurements on images to figure out which should be used for filtering out objects', '2014-12-17, sfn']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:displayDataImage3
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch1_DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlaidData
    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays/\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ch2_RFP
    Name the output image:RFP_overlaid
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:CYTOPLASM

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:RFP_overlaid
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch2_RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cytoplasmOverlaid
    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays/\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:23|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notes:['Measure shape of NUCLEI_FILTERED_FURTHER.', '2014-12-17, sfn']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
    Select objects to measure:NUCLEI_FILTERED_FURTHER
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:24|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notes:['Measure intensities in DAPI channel.', 'Use results for quality control.', "We see at least two distinct populations in Vidya's cells.", '2014-12-17, sfn']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
    Hidden:1
    Select an image to measure:ch1_DAPI
    Select objects to measure:NUCLEI_FILTERED

MeasureObjectIntensity:[module_num:25|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notes:['Measure intensity in RFP channel in FOCI and in CYTOPLASM.', '2014-12-17, sfn']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
    Hidden:1
    Select an image to measure:ch2_RFP
    Select objects to measure:FOCI
    Select objects to measure:CYTOPLASM

MeasureObjectRadialDistribution:[module_num:26|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notes:['Measure the intensity in RFP channel in rings in the cytoplasm, centered on the nucleus.', 'This is a proxy for foci localisation.', 'The maximum radius is taken as max radius for nucleus (45) + thickness of ring-cytoplasm (30), then rounded up to neares tens.', "Use either CELLS and center of nuclei; or CYTOPLASM and edge of nuclei; do not use CYTOPLASM and center of nuclei - that doesn't work!", '2014-12-17, sfn']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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:ch2_RFP
    Select objects to measure:CELLS
    Object to use as center?:Edges of other objects
    Select objects to use as centers:NUCLEI_FILTERED_FURTHER
    Scale the bins?:Yes
    Number of bins:3
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
MeasureGranularity:[module_num:27|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notes:['SLOW! Select parameters carefully.', 'This is a proxy for actual detection of foci in the cytoplasm', '2014-12-16, sfn']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
    Image count:1
    Object count:1
    Select an image to measure:ch2_RFP
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.125
    Radius of structuring element:1
    Range of the granular spectrum:2
    Select objects to measure:CYTOPLASM

MeasureTexture:[module_num:28|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notes:['SLOW! Select parameters carefully.', 'This is used for ML classification - if at all.', '2014-12-16, sf']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enabled:False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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:ch2_RFP
    Select objects to measure:CYTOPLASM
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Both

OverlayOutlines:[module_num:29|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notes:['Overlay NUCLEI_FILTERED_FURTHER on enhanced DAPI channel', '2014-12-17, sfn']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ch1_DAPI
    Name the output image:DAPI_overlaid
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:NUCLEI_FILTERED_FURTHER

DisplayDataOnImage:[module_num:30|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notes:['Display some measurements on the overlaid image.', '2014-12-17, sfn']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
    Display object or image measurements?:Object
    Select the input objects:NUCLEI_FILTERED_FURTHER
    Measurement to display:AreaShape_Solidity
    Select the image on which to display the measurements:DAPI_overlaid
    Text color:green
    Name the output image that has the measurements displayed:displayDataImage
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:31|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notes:['Save the overlay of NUCLEI_FILTERED_FURTHER on enhanced DAPI channel.', 'For human use and inspection only. These overlays are not imported to openBIS', '2014-12-17, sfn']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
    Select the type of image to save:Image
    Select the image to save:displayDataImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch1_DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nucleiOverlaidMath
    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays/\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ImageMath:[module_num:32|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notes:['Rescale the FOCI channel (RFP) so the cells are visible', '2014-05-09 sfn']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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ch2_RFP_sqrt
    Image or measurement?:Image
    Select the first image:ch2_RFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:33|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notes:['Overlay FOCI and CYTOPLASM outlines on enhanced RFP channel', '2014-12-17 sfn']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ch2_RFP_sqrt
    Name the output image:overlaidFociOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
    Select outlines to display:fociOutlines
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    Load outlines from an image or objects?:Objects
    Select objects to display:FOCI
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    Load outlines from an image or objects?:Objects
    Select objects to display:CYTOPLASM

DisplayDataOnImage:[module_num:34|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notes:['Display number of FOCI in the CELL', '2014-12-17, sfn']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
    Display object or image measurements?:Object
    Select the input objects:CELLS
    Measurement to display:Children_FOCI_Count
    Select the image on which to display the measurements:overlaidFociOutlines
    Text color:yellow
    Name the output image that has the measurements displayed:displayDataImage_ch2_temp
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:35|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
    Display object or image measurements?:Object
    Select the input objects:CELLS
    Measurement to display:RadialDistribution_MeanFrac_ch2_RFP_1of3
    Select the image on which to display the measurements:displayDataImage_ch2_temp
    Text color:red
    Name the output image that has the measurements displayed:displayDataImage_ch2_temp
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:36|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notes:['Display some measurements directly on the overlaid image.', '2014-12-17, sfn']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
    Display object or image measurements?:Object
    Select the input objects:CYTOPLASM
    Measurement to display:Granularity_2_ch2_RFP
    Select the image on which to display the measurements:displayDataImage_ch2_temp
    Text color:cyan
    Name the output image that has the measurements displayed:displayDataImage_ch2
    Font size (points):10
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):40
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:37|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notes:['Save overlaid image of FOCI and CYTOPLASM', '2014-12-05, sfn']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
    Select the type of image to save:Image
    Select the image to save:overlaidFociOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ch2_RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlaidFociCytoplasmOutlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays/\\\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:38|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notes:['Use this module to measure how much time is spent on each module', '2014-12-16, sfn']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|./csv_files/\\\\g<Plate>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:CYTOPLASM|Parent_NUCLEI_FILTERED_FURTHER,CYTOPLASM|Parent_CELLS,CYTOPLASM|Intensity_MinIntensity_ch2_RFP,CYTOPLASM|Intensity_StdIntensity_ch2_RFP,CYTOPLASM|Intensity_IntegratedIntensityEdge_ch2_RFP,CYTOPLASM|Intensity_MassDisplacement_ch2_RFP,CYTOPLASM|Intensity_MinIntensityEdge_ch2_RFP,CYTOPLASM|Intensity_IntegratedIntensity_ch2_RFP,CYTOPLASM|Intensity_UpperQuartileIntensity_ch2_RFP,CYTOPLASM|Intensity_MADIntensity_ch2_RFP,CYTOPLASM|Intensity_StdIntensityEdge_ch2_RFP,CYTOPLASM|Intensity_MeanIntensityEdge_ch2_RFP,CYTOPLASM|Intensity_MaxIntensity_ch2_RFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:Experiment_\\\\g<Plate>.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_\\\\g<Plate>.csv
    Use the object name for the file name?:No
    Data to export:CYTOPLASM
    Combine these object measurements with those of the previous object?:No
    File name:CYTOPLASM_\\\\g<Plate>.csv
    Use the object name for the file name?:No
    Data to export:CELLS
    Combine these object measurements with those of the previous object?:No
    File name:CELLS_\\\\g<Plate>.csv
    Use the object name for the file name?:No
