CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150220234558
GitHash:f46e81d
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the nuclei image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,200
    Top and bottom rectangle positions:1,200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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notes:['Use the same cropping from the nuclei image for the PH3 image.']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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,200
    Top and bottom rectangle positions:1,200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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notes:['Use the same cropping from the nuclei image for the cell stain image.']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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,200
    Top and bottom rectangle positions:1,200
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    Remove empty rows and columns?:Edges
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropRed
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the cropped images.']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
    Hidden:2
    Select an image to measure:CropBlue
    Select an image to measure:CropGreen
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:12|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:13|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notes:['Overlay the nucleus outlines on the cropped nuclear image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropBlue
    Name the output image:OutlinedNuc
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:White
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:14|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notes:["Save the overlay image as an 8-bit TIF, appending the text 'outline' to the original filename of the nuclei image."]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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OutlinedNuc
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outline
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
